PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 02version
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Routines
  Routine trial
    GratingComponent fixation
      color = $[-1,-1,-1]
      mask = gauss
      opacity [set every repeat] = 1
      sf = 0
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      tex = sin
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    PolygonComponent go_item
      fillColor [set every repeat] = $go_color
      lineColor = $[-1,-1,-1]
      opacity [set every repeat] = 1
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.5
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Flow
  LoopInitiator fuenfMal loopType="TrialHandler"
    conditionsFile = 02loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('go_color', 'Red')]),
      OrderedDict([('go_color', 'Green')]),
      OrderedDict([('go_color', 'Blue')]),
      OrderedDict([('go_color', 'DarkSalmon')]),
      OrderedDict([('go_color', 'Black')])]
    Routine trial
  LoopTerminator fuenfMal
