PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 04version
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Routines
  Routine trial
    GratingComponent fixation
      color = $[-1,-1,-1]
      mask = gauss
      opacity [set every repeat] = 1
      sf = 0
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      tex = sin
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    PolygonComponent go_item
      fillColor [set every repeat] = $go_color
      lineColor = $[-1,-1,-1]
      opacity [set every repeat] = 1
      pos [set every frame] = stim_pos
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'space', None
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        #Dies ist ein Kommentar
        #random() gibt einen zufälligen Wert zwischen 0.0 und 1.0 aus
        #50% der Fälle entspricht also >0.5
        if (random() > 0.5): #entweder mache dies:
            #setze stim_pos Variable auf (-2,0)
            stim_pos = (-0.5,0)
        else: #oder mache das:
            stim_pos = (0.5,0)
      End Routine:
        #speichere die Position des Stimulus in userem
        #data Datei mit allen anderen Daten
        thisExp.addData('stimulusPosition',stim_pos)
  Routine instruction
    TextComponent instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Drücken Sie die Leertaste wenn das angezeigte Kreuz rot ist.
        Drücken Sie keine Taste falls das angezeigte Kreuz NICHT rot ist.

        Drücken Sie die Leertaste zum starten!
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  Routine instruction
  LoopInitiator fuenfMal loopType="TrialHandler"
    conditionsFile = 03loop.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('go_color', 'Red'), ('corrAns', 'space')]),
      OrderedDict([('go_color', 'Green'), ('corrAns', 'None')]),
      OrderedDict([('go_color', 'Blue'), ('corrAns', 'None')]),
      OrderedDict([('go_color', 'DarkSalmon'), ('corrAns', 'None')]),
      OrderedDict([('go_color', 'Black'), ('corrAns', 'None')])]
    Routine trial
  LoopTerminator fuenfMal
